PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = soloproj6
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        In this experiment, you will see a flash and hear a beep.
        Your task is to decide which came first:
        -
        Press "s" if the SOUND came first.

        Press "v" if the VISUAL came first.

        Press"b" if both are at the same time.

        the experiment wil start soon
  Routine test_routine
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    PolygonComponent visual_stim
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = $visualStart
      stopVal [duration (s)] = 1
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    SoundComponent sound_stim
      sound [set every repeat] = 3000
      startVal [time (s)] = $soundStart
      stopVal [duration (s)] = 1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if Order == 'visual_first':
            visualStart = 0  # Visual stimulus starts immediately
            soundStart = Offset  # Audio starts after the specified offset
        elif Order == 'audio_first':
            soundStart = 0  # Audio stimulus starts immediately
            visualStart = Offset  # Visual starts after the specified offset
        else:  # simultaneous
            visualStart = 0
            soundStart = 0
  Routine respond_now
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = respond now
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    KeyboardComponent key_resp_2
      allowedKeys = 's','v','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditontop.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'Offset': 0, 'Order': 'simulataneous'},
      {'Offset': 1, 'Order': 'visual_first'},
      {'Offset': 1, 'Order': 'audio_first'},
      {'Offset': 2, 'Order': 'visual_first'},
      {'Offset': 2, 'Order': 'audio_first'},
      {'Offset': 3, 'Order': 'visual_first'},
      {'Offset': 3, 'Order': 'audio_first'}]
    Routine test_routine
    Routine respond_now
  LoopTerminator trials
