PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = strooptask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','y'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [{'word': 'RED', 'color': 'red', 'stim_cond': 'C', 'correct_res': 'r'},
      {'word': 'RED', 'color': 'blue', 'stim_cond': 'I', 'correct_res': 'b'},
      {'word': 'YELLOW', 'color': 'yellow', 'stim_cond': 'C', 'correct_res': 'y'},
      {'word': 'BLUE', 'color': 'blue', 'stim_cond': 'C', 'correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
