PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = wordpriming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_test
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine testroutine
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/IPE India/Desktop/UNI DATA/PSY310/wordpriming/word_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_test': 'vase'},
      {'study_test': 'tiger'},
      {'study_test': 'book '},
      {'study_test': 'cushion'},
      {'study_test': 'piano '}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/IPE India/Desktop/UNI DATA/PSY310/wordpriming/testwords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_n_'},
      {'test': '_ea_o_'},
      {'test': 'c_m_r_'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'}]
    Routine testroutine
  LoopTerminator trials_2
